---
API: 2
OpenSesame: 3.0.7
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sampler_backend legacy
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set foreground white
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Alex_NI\\Desktop\\Exp Elvio\\TASKS\\01 SVV"
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background black

define inline_script INIT
	set description "Executes Python code"
	___run__
	#pre-define a few variables
	Trial=0
	exp.set('Trial', Trial)
	
	confirm=None
	exp.set('confirm', confirm)
	
	#sequence of angles
	import numpy
	Degrees= numpy.around(numpy.arange(-20, 20.1, 0.1), decimals= 1)
	
	#connect name in the pool file and angles
	Names = [w.replace('-', 'm') for w in map(str, Degrees)]
	Names = [w.replace('.0', '') for w in map(str, Names)]
	for i in range(0, len(Degrees)):
		Names[i]= Names[i] + '.png'
		
	Names= numpy.asarray(Names)
	
	#canvas initialize 
	canvas_target= canvas()
	
	#keyboard initialize
	my_keyboard= keyboard()
	__end__
	set _prepare ""

define feedback Instructions
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="La tâche consiste en tourner la ligne blanche au milieu de l’écran jusqu'à  une position verticale.<br /><br /><br />Pour cela, appuyez sur:<br /><br /><br />. N - rotation horaire<br />. B - rotation anti-horaire<br /><br /><br /><br />Donnez la priorité à la précision sur la vitesse.<br /><br /><br />Quand à votre avis la ligne sera verticale appuyez sur ESPACE pour confirmer la sélection et passer à l’essai suivante.<br /><br /><br /><br /><br />(Appuyez ESPACE pour démarrer la tache)<br />" x=0 y=0 z_index=0

define logger Log_data
	set description "Logs experimental data"
	set auto_log yes

define loop Main_Loop
	set skip 0
	set repeat 12
	set order random
	set offset no
	set item Trial_Seq
	set description "Repeatedly runs another item"
	set cycles 2
	set column_order StartingSide
	set break_if never
	setcycle 0 StartingSide "Left"
	setcycle 1 StartingSide "Right"
	run Trial_Seq

define inline_script Main_task
	set description "Executes Python code"
	___run__
	#reset screen
	canvas_target.clear()
	
	#prompt/update variables	
	Trial= Trial + 1
	exp.set('Trial', Trial)
	
	#trial specific info - starting angle
	#depends on side
	import random
	if exp.get("StartingSide")=="Left":
		RandomInt= random.randint(0, len(Degrees[Degrees<0]-10))
	else:
		RandomInt= random.randint(len(Degrees[Degrees<0])+12, len(Degrees)-1)
		
	StartingOrientation= Degrees[RandomInt]
	StartingOrientation= round(StartingOrientation, 1)
	exp.set('StartingOrientation', StartingOrientation)
	
	#starting values, angle counter
	CurrentOrientation= StartingOrientation
	confirm= None
	
	#main loop
	while confirm is not 'space': #spacebar to confirm choice	
		confirm= None
		
		#draw canvas
		canvas_target.image(exp.pool[Names[Degrees==CurrentOrientation][0]], 
		x=0, y=0, scale = 1)
		canvas_target.show()
		
		#flush
		press= None
			
		while press is None: #up to some choice
			press, timestamp= my_keyboard.get_key(timeout= 5)
	
			#update as function of the choice
			#gradual decrease in step size (min=0.1°)
			if press == 'b': #anticlockwise
				CurrentOrientation= CurrentOrientation - 0.1 - round(abs(CurrentOrientation/30), 1)
			elif press == 'n': #clockwise
				CurrentOrientation= CurrentOrientation + 0.1 + round(abs(CurrentOrientation/30), 1)
			elif press == 'space':
				confirm= 'space'
				break
		
		#cope with out of bounds responses
		if CurrentOrientation> max(Degrees):
			CurrentOrientation= max(Degrees)
		elif CurrentOrientation< min(Degrees):
			CurrentOrientation= min(Degrees)
		
		#cope with floating points
		CurrentOrientation= round(CurrentOrientation, 1)
		
		#self.sleep(10) #allow button release
		my_keyboard.flush()
		
		#reset screen
		canvas_target.clear()
		
	
	
	exp.set('FinalOrientation', CurrentOrientation)
	
	#save whether this is practice or test
	if Trial> NbPracticeTrials:
		exp.set('Phase', "Test")
	else:
		exp.set('Phase', "Practice")
	__end__
	set _prepare ""

define inline_script Prompt_info
	set description "Executes Python code"
	___run__
	
	###############################################################################
	###############################################################################
	#####################This part is meant to be user-defined#####################
	###information included here is meant to change for each subject and session###
	###############################################################################
	###############################################################################
	
	
	#Store, for safety reasons, a second variable including the subject's number
	Subject= 8
	
	#Store condition, for simplicity, to double check
	GVS= "A"
	
	#Store session number
	SessionNb=1
	
	#number of trials to be administered and flagged as "practice" in logs
	#as a subset of all the cycles declared in the main loop 
	#e.g. 24 trials overall, 4 practice
	NbPracticeTrials= 0
	
	
	#then save for logging
	exp.set("Subject", Subject)
	exp.set("GVS", GVS)
	exp.set("SessionNb", SessionNb)
	__end__
	set _prepare ""

define sequence Trial_Seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Main_task always
	run Log_data always

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prompt_info always
	run INIT always
	run Instructions always
	run Main_Loop always

