---
API: 2.1
OpenSesame: 3.2.4
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Invites Labo\\Desktop\\DRAFT\\GVS interference\\Scripts"
set disable_garbage_collection yes
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background black

define inline_script INIT
	set description "Executes Python code"
	___run__
	#pre-define a few variables
	confirm=None
	exp.set('confirm', confirm)
	
	#canvas initialize 
	canvas_Question= canvas()
	canvas_Cursor= canvas()
	
	#keyboard + mouse initialize
	my_keyboard = keyboard()
	my_mouse = mouse(visible=True)
	__end__
	set _prepare ""

define feedback Instructions
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You are now going to read a few questions<br />(top of the screen).<br /><br />Below the questions you will see an horizontal line<br />representing a continnuum<br />between two different responses<br />(e.g. left - right).<br /><br />Use the mouse to select a position on the line<br />that best represents the sensations<br />you experienced today,<br />then press the SPACEBAR to confirm<br />or the V key to change your response. <br />" x=0 y=0 z_index=0

define logger Log_data
	set description "Logs experimental data"
	set auto_log yes

define loop Main_Loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item Trial_Seq
	set description "Repeatedly runs another item"
	set cycles 17
	set continuous no
	set column_order "Question;RespLeft;RespRight"
	set break_if_on_first yes
	set break_if never
	setcycle 0 RespRight droite
	setcycle 0 Question "J'ai senti mon corps se déplacer"
	setcycle 0 RespLeft "gauche "
	setcycle 1 RespRight haut
	setcycle 1 Question "J'ai senti mon corps se déplacer "
	setcycle 1 RespLeft bas
	setcycle 2 RespRight "en avant"
	setcycle 2 Question "J'ai senti mon corps se déplacer "
	setcycle 2 RespLeft "en arrière "
	setcycle 3 RespRight droite
	setcycle 3 Question "J'ai senti mon corps tourner "
	setcycle 3 RespLeft "gauche "
	setcycle 4 RespRight droite
	setcycle 4 Question "J'ai senti ma tête pivoter "
	setcycle 4 RespLeft "gauche "
	setcycle 5 RespRight droite
	setcycle 5 Question "J'ai senti la scène visuelle se déplacer "
	setcycle 5 RespLeft "gauche "
	setcycle 6 RespRight beaucoup
	setcycle 6 Question "J'ai ressenti des vertiges "
	setcycle 6 RespLeft "pas du tout "
	setcycle 7 RespRight beaucoup
	setcycle 7 Question "J'ai ressenti de la nausée"
	setcycle 7 RespLeft "pas du tout "
	setcycle 8 RespRight beaucoup
	setcycle 8 Question "J'ai senti mon corps (ou une partie) changer de taille"
	setcycle 8 RespLeft "pas du tout "
	setcycle 9 RespRight beaucoup
	setcycle 9 Question "J'ai ressenti des picotements"
	setcycle 9 RespLeft "pas du tout "
	setcycle 10 RespRight beaucoup
	setcycle 10 Question "Je me sentais brûlant"
	setcycle 10 RespLeft "pas du tout "
	setcycle 11 RespRight beaucoup
	setcycle 11 Question "Je me sentais mal à l'aise"
	setcycle 11 RespLeft "pas du tout "
	setcycle 12 RespRight beaucoup
	setcycle 12 Question "Je me suis concentré sur la tâche"
	setcycle 12 RespLeft "pas du tout "
	setcycle 13 RespRight beaucoup
	setcycle 13 Question "Je me sentais motivé à accomplir la tâche"
	setcycle 13 RespLeft "pas du tout "
	setcycle 14 RespRight beaucoup
	setcycle 14 Question "Je me sentais motivé par la récompense"
	setcycle 14 RespLeft "pas du tout "
	setcycle 15 RespRight beaucoup
	setcycle 15 Question "Je me sentais motivé par (eviter) les pertes"
	setcycle 15 RespLeft "pas du tout "
	setcycle 16 RespRight beaucoup
	setcycle 16 Question "Je me sentais bluffé par les fleches sur les cotes"
	setcycle 16 RespLeft "pas du tout "
	run Trial_Seq

define inline_script Main_task
	set description "Executes Python code"
	___run__
	#starting values
	confirm=None
	
	#main loop until space is pressed
	while confirm is not 'space':	
			confirm=None
			#showtarget
			canvas_Question.show()
			my_mouse.show_cursor(True)
			my_mouse.set_pos(pos=(0,200))
			#wait for mouse click
			while True:
					button, position, timestamp = my_mouse.get_click(timeout=20)
					if button is not None:
							break
			(x,y), time = my_mouse.get_pos()
			#save values in the environment	
			exp.set('X_Resp', x)
			exp.set('Y_Resp', y)
			
			#print landmark to confirm choice
			canvas_Cursor.copy(canvas_Question)
			canvas_Cursor.line(x, 190, x, 210)  
			canvas_Cursor.show()
			
			#wait for space to confirm - any other key cancel 
			#the landmark and start the loop from the begin
			while confirm is None:
				confirm, timestamp = my_keyboard.get_key(timeout=20)
				exp.set('confirm', confirm)
			if confirm=='space':
							break
	__end__
	set _prepare ""

define inline_script Prompt_info
	set description "Executes Python code"
	___run__
	
	###############################################################################
	###############################################################################
	#####################This part is meant to be user-defined#####################
	###information included here is meant to change for each subject and session###
	###############################################################################
	###############################################################################
	
	
	#Store, for safety reasons, a second variable including the subject's number
	Subject= 8
	
	#Store condition, for simplicity, to double check
	GVS= "A"
	
	
	#then save for logging
	exp.set("Subject", Subject)
	exp.set("GVS", GVS)
	__end__
	set _prepare ""

define inline_script QuestionCanvas
	set description "Executes Python code"
	___run__
	#define canvas parameters
	canvas_Question = canvas(color=u'white', penwidth=1)
	
	#response line
	canvas_Question.line(-350, 200, 350, 200, penwidth= 2)
	
	#question text
	canvas_Question.text(exp.get("Question"), x=0, y=-100, font_size=30, font_bold= True)
	
	#left and right anchors
	canvas_Question.text(exp.get("RespLeft"), x=-300, y=100, font_size=30, font_bold= True)
	canvas_Question.text(exp.get("RespRight"), x=300, y=100, font_size=30, font_bold= True)
	__end__
	set _prepare ""

define sequence Trial_Seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run QuestionCanvas always
	run Main_task always
	run Log_data always

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prompt_info always
	run INIT always
	run Instructions always
	run Main_Loop always

