---
API: 2.1
OpenSesame: 3.3.9
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set psychopy_screen 1
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Semenzato\\Desktop\\Blini\\harvest\\01 DPT"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define inline_script Cue
	set description "Executes Python code"
	___run__
	eyetracker.log("cue")
	
	canvas_cue.show()
	
	self.sleep(soa)
	__end__
	set _prepare ""

define feedback End
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="L'esperimento è terminato.<br /><br />Grazie per la partecipazione!" x=0 y=0 z_index=0

define sequence ExpSequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run InlineCanvas always
	run new_pygaze_start_recording always
	run Fixation always
	run Cue always
	run Target always
	run new_pygaze_stop_recording always
	run Log always
	run new_pygaze_log always
	run TrialReset always
	run Pause "[Trial]== 96"

define loop ExperimentList
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 SOA 1500
	setcycle 0 Side left
	setcycle 0 Condition A
	setcycle 0 Target up
	setcycle 0 Image 1
	setcycle 1 SOA 1500
	setcycle 1 Side right
	setcycle 1 Condition A
	setcycle 1 Target up
	setcycle 1 Image 1
	setcycle 2 SOA 1500
	setcycle 2 Side left
	setcycle 2 Condition B
	setcycle 2 Target up
	setcycle 2 Image 1
	setcycle 3 SOA 1500
	setcycle 3 Side right
	setcycle 3 Condition B
	setcycle 3 Target up
	setcycle 3 Image 1
	setcycle 4 SOA 1500
	setcycle 4 Side left
	setcycle 4 Condition A
	setcycle 4 Target down
	setcycle 4 Image 1
	setcycle 5 SOA 1500
	setcycle 5 Side right
	setcycle 5 Condition A
	setcycle 5 Target down
	setcycle 5 Image 1
	setcycle 6 SOA 1500
	setcycle 6 Side left
	setcycle 6 Condition B
	setcycle 6 Target down
	setcycle 6 Image 1
	setcycle 7 SOA 1500
	setcycle 7 Side right
	setcycle 7 Condition B
	setcycle 7 Target down
	setcycle 7 Image 1
	setcycle 8 SOA 1500
	setcycle 8 Side left
	setcycle 8 Condition A
	setcycle 8 Target up
	setcycle 8 Image 2
	setcycle 9 SOA 1500
	setcycle 9 Side right
	setcycle 9 Condition A
	setcycle 9 Target up
	setcycle 9 Image 2
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	run ExpSequence

define inline_script Fixation
	set description "Executes Python code"
	___run__
	
	canvas_fixation.show()
	
	self.sleep(495)
	
	#considera jitter
	__end__
	set _prepare ""

define inline_script INIT
	set description "Executes Python code"
	___run__
	
	
	##################################################
	#info for the log files / participant's dependent#
	##################################################
	 
	Subject= 2
	Session= 1
	
	
	
	##################################################
	#other variables / experimental control###########
	##################################################
	Trial= 0
	exp.set("Trial", Trial)
	
	#response_time= None
	#exp.set("RT", response_time)
	
	#key= None
	#exp.set("key", key)
	
	#accuracy= None
	#exp.set("Accuracy", accuracy)
	
	phase= "practice"
	exp.set("Phase", phase)
	
	
	#this is random across subjects
	import random
	seed= Subject*Session + 100*Subject
	
	random.seed(seed)
	
	# scale down or up images
	scale= 0.25
	
	displ_images= int(scale*800/1.2)  #amount of displacement for images and cues   
	
	#da fare
	#edi numero Trial
	# #instruzioni
	#pausa
	#vedi immagini luminanza
	#vedi var congruenza
	
	
	##################################################
	# fixed control settings##########################
	##################################################
	
	from pygaze import settings 
	    
	settings.TRACKERSERIALNUMBER = "TPSP1-010107242734"
	__end__
	set _prepare ""

define inline_script InlineCanvas
	set description "Executes Python code"
	___run__
	
	#find image(s)
	
	#get image
	imgA= str(exp.get("Image")) + " A.jpg"
	imgB= str(exp.get("Image")) + " B.jpg"
	
	if exp.get("Target")== "up":
	    imgTarget= "cueUP.jpg"
	else:
	    imgTarget= "cueDown.jpg"
	  
	 
	#find soa
	soa= exp.get("SOA")   
	    
	#if condition== "A" then cue is on smoking object and in given Side
	
	if exp.get("Condition")== "A":
	    
	    if exp.get("Side")== "left":
	        canvas_cue.image(exp.pool[imgA], x= - displ_images, y= 0, scale= scale)
	        canvas_cue.image(exp.pool[imgB], x= + displ_images, y= 0, scale= scale)
	        
	        canvas_target.copy(canvas_cue)
	        canvas_target.image(exp.pool[imgTarget], x= - displ_images, y= 0, scale= 1)
	        
	    else:
	        canvas_cue.image(exp.pool[imgA], x= + displ_images, y= 0, scale= scale)
	        canvas_cue.image(exp.pool[imgB], x= - displ_images, y= 0, scale= scale)
	        
	        canvas_target.copy(canvas_cue)
	        canvas_target.image(exp.pool[imgTarget], x= + displ_images, y= 0, scale= 1)
	
	else:
	    #condition== "B" then cue is on B object and in given Side
	    if exp.get("Side")== "left":
	        canvas_cue.image(exp.pool[imgA], x= + displ_images, y= 0, scale= scale)
	        canvas_cue.image(exp.pool[imgB], x= - displ_images, y= 0, scale= scale)
	        
	        canvas_target.copy(canvas_cue)
	        canvas_target.image(exp.pool[imgTarget], x= - displ_images, y= 0, scale= 1)
	        
	    else:
	        canvas_cue.image(exp.pool[imgA], x= - displ_images, y= 0, scale= scale)
	        canvas_cue.image(exp.pool[imgB], x= + displ_images, y= 0, scale= scale)
	        
	        canvas_target.copy(canvas_cue)
	        canvas_target.image(exp.pool[imgTarget], x= + displ_images, y= 0, scale= 1)
	__end__
	set _prepare ""

define feedback Instruction2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="La prova è terminata.<br /><br />Se ha delle domande, può porle ora.<br /><br />Altrimenti, prema SPAZIO per iniziare l'esperimento." x=0 y=0 z_index=0

define feedback Instructions
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In questo esperimento vedrà delle immagini sullo schermo. Le immagini saranno presentate in coppia, a sinistra e a destra rispetto al centro dello schermo. Dopo un intervallo di tempo variabile, su una delle due immagini verrà presentata una forma circolare con apertura rivolta verso l'alto oppure verso il basso (landholt C).<br /><br />Il suo compito è quello di identificare il lato di questa apertura.<br /><br />Se l'apertura è rivolta verso il BASSO prema la FRECCIA VERSO IL BASSO.<br /><br />Se l'apertura è rivolta verso l'ALTO prema la FRECCIA VERSO L'ALTO.<br /><br /><br />Prima di iniziare l'esperimento eseguirà qualche trial di prova.<br /><br />Prema SPAZIO quando è prenta/o ad iniziare con la prova.<br /><br /> " x=0 y=0 z_index=0

define logger Log
	set description "Logs experimental data"
	set auto_log yes

define inline_script OfflineCanvas
	set description "Executes Python code"
	___run__
	
	# fixation
	canvas_fixation= canvas()
	canvas_fixation.fixdot(0, 0, style= 'large-cross')
	
	# cues
	canvas_cue= canvas()
	
	# target
	canvas_target= canvas()
	
	
	
	my_keyboard = keyboard(keylist= ['up', 'down'])
	__end__
	set _prepare ""

define feedback Pause
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Pausa!<br /><br /><br /><br />Quando sarà pronta/o per iniziare di nuovo prema SPAZIO. " x=0 y=0 z_index=0

define loop PracticeList
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set break_if_on_first yes
	set break_if "[Trial]==12"
	setcycle 0 SOA 1500
	setcycle 0 Side left
	setcycle 0 Condition A
	setcycle 0 Target up
	setcycle 0 Image 1
	setcycle 1 SOA 1500
	setcycle 1 Side right
	setcycle 1 Condition A
	setcycle 1 Target up
	setcycle 1 Image 1
	setcycle 2 SOA 1500
	setcycle 2 Side left
	setcycle 2 Condition B
	setcycle 2 Target up
	setcycle 2 Image 1
	setcycle 3 SOA 1500
	setcycle 3 Side right
	setcycle 3 Condition B
	setcycle 3 Target up
	setcycle 3 Image 1
	setcycle 4 SOA 1500
	setcycle 4 Side left
	setcycle 4 Condition A
	setcycle 4 Target down
	setcycle 4 Image 1
	setcycle 5 SOA 1500
	setcycle 5 Side right
	setcycle 5 Condition A
	setcycle 5 Target down
	setcycle 5 Image 1
	setcycle 6 SOA 1500
	setcycle 6 Side left
	setcycle 6 Condition B
	setcycle 6 Target down
	setcycle 6 Image 1
	setcycle 7 SOA 1500
	setcycle 7 Side right
	setcycle 7 Condition B
	setcycle 7 Target down
	setcycle 7 Image 1
	setcycle 8 SOA 1500
	setcycle 8 Side left
	setcycle 8 Condition A
	setcycle 8 Target up
	setcycle 8 Image 2
	setcycle 9 SOA 1500
	setcycle 9 Side right
	setcycle 9 Condition A
	setcycle 9 Target up
	setcycle 9 Image 2
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	run ExpSequence

define inline_script Reset
	set description "Executes Python code"
	___run__
	Trial= 0
	exp.set("Trial", Trial)
	
	#response_time= None
	#exp.set("RT", response_time)
	
	#key= None
	#exp.set("key", key)
	
	#accuracy= None
	#exp.set("Accuracy", accuracy)
	
	phase= "experiment"
	exp.set("Phase", phase)
	__end__
	set _prepare ""

define inline_script Target
	set description "Executes Python code"
	___run__
	eyetracker.log("target")
	
	
	canvas_target.show()
	
	t0= self.time()
	    
	key, t1= my_keyboard.get_key(timeout= 1500)
	  
	if key== exp.get("Target"):
	    accuracy= 1
	    response_time= t1 - t0
	else:
	    accuracy= 0
	    response_time= 99999
	        
	exp.set("Response", key)
	exp.set("Accuracy", accuracy)
	exp.set("RT", response_time)
	    
	
	##sleep entire time if response was fast?
	#while (self.time() - t0) < 1500:
	#    self.sleep(2)
	    
	__end__
	set _prepare ""

define inline_script TrialReset
	set description "Executes Python code"
	___run__
	
	
	Trial= Trial + 1
	exp.set("Trial", Trial)
	
	#response_time= None
	#exp.set('RT', response_time)
	
	#key= None
	#exp.set("key", key)
	
	#accuracy= None
	#exp.set("Accuracy", accuracy)
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run INIT always
	run OfflineCanvas always
	run new_pygaze_init always
	run Instructions always
	run PracticeList always
	run Instruction2 always
	run Reset always
	run ExperimentList always
	run End always

define pygaze_init new_pygaze_init
	set tracker_type Tobii
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate no
	set calbeep no
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_log new_pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording new_pygaze_start_recording
	set status_msg fixation
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop
	set description "Stops recording of eye tracking data"

